PsychoPy2experiment version="1.82.01"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  color = $[-1.000,-1.000,-1.000]
  Window size (pixels) = [1366, 768]
  Full-screen window = True
  Experiment info = {u'gender': u'', u'age': u'', u'participant': u''}
  expName = RRT
  logging level = warning
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    CodeComponent trials_code
      Begin Experiment:
        msg=""
      Begin Routine:
        # choose a random exemplar from the appropriate trial type list
        if trial_type == 1:
            stimulus = trial_type_1_trials.pop()
        elif trial_type == 2:
            stimulus = trial_type_2_trials.pop()
        elif trial_type == 3:
            stimulus = trial_type_3_trials.pop()
        elif trial_type == 4:
            stimulus = trial_type_4_trials.pop()
        elif trial_type == 5:
            stimulus = trial_type_5_trials.pop()
        elif trial_type == 6:
            stimulus = trial_type_6_trials.pop()

        # stimulus colors
        if trial_type == 1 or trial_type == 2:
             stimulus_color = "orange"
        elif trial_type >2:
             stimulus_color = "cyan"

        # correct and incorrect answers for each trialtype in each block
        if trial_type == 1: #true
            required_allowed = "i"
            required_correct = "i"
            feedback_allowed = "e"
            feedback_correct = "e"
        elif trial_type == 2: #false
            required_allowed = "e"
            required_correct = "e"
            feedback_allowed = "i"
            feedback_correct = "i"
        if blocks.thisN <= 2:
            if trial_type == 3: #self pos
                required_allowed = "i"
                required_correct = "i"
                feedback_allowed = "e"
                feedback_correct = "e"
            elif trial_type == 4: #self neg
                required_allowed = "e"
                required_correct = "e"
                feedback_allowed = "i"
                feedback_correct = "i"
            elif trial_type == 5: #self not pos
                required_allowed = "e"
                required_correct = "e"
                feedback_allowed = "i"
                feedback_correct = "i"
            elif trial_type == 6: #self not neg
                required_allowed = "i"
                required_correct = "i"
                feedback_allowed = "e"
                feedback_correct = "e"
        elif blocks.thisN >= 3:
            if trial_type == 3: #self pos
                required_allowed = "e"
                required_correct = "e"
                feedback_allowed = "i"
                feedback_correct = "i"
            elif trial_type == 4: #self neg
                required_allowed = "i"
                required_correct = "i"
                feedback_allowed = "e"
                feedback_correct = "e"
            elif trial_type == 5: #self not pos
                required_allowed = "i"
                required_correct = "i"
                feedback_allowed = "e"
                feedback_correct = "e"
            elif trial_type == 6: #self not neg
                required_allowed = "e"
                required_correct = "e"
                feedback_allowed = "i"
                feedback_correct = "i"
      Each Frame:
        if len(feedback_response.keys)<1:
            msg=""
        else:
            msg="X"
    KeyboardComponent required_response
      correctAns = $required_correct 
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys [set every repeat] = required_allowed
      startVal [time (s)] = 0.3
      store = first key
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    KeyboardComponent feedback_response
      correctAns = $feedback_correct 
      storeCorrect = True
      forceEndRoutine = False
      allowedKeys [set every repeat] = feedback_allowed
      startVal [time (s)] = .3
      store = first key
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    TextComponent stimulus_box
      color [set every repeat] = $stimulus_color
      text [set every repeat] = $stimulus
      startVal [time (s)] = 0.3
      letterHeight = 0.1
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    TextComponent feedback
      color = red
      text [set every frame] = $msg
      pos = [0, -.5]
      startVal [time (s)] = .3
      letterHeight = 0.2
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    TextComponent true_text
      text [set every repeat] = $true_label
      pos = [0.75, 0.75]
      startVal [time (s)] = 0
      letterHeight = 0.1
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    TextComponent false_text
      text [set every repeat] = $false_label
      pos = [-0.75, 0.75]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine instruction
    CodeComponent block_code
      Begin Experiment:
        # Dependencies
        import itertools  # for flattening lists of lists into lists
        import random
        import math  # for math.ceil() rounding up

        # Import stimuli exemplars
        exemplars_filename = 'stimuli.xlsx'
        exemplars = data.importConditions(exemplars_filename)# Import stimuli exemplars

        # Determine rows of examplars (i.e., max number of rows)
        """
        This method creates a fully counterbalanced presentation of exemplars when there are 5
        of them, but it will not present each one an equal number of times it the n diverges from 5.
        """
        n_exemplars = len(exemplars)
        list_multiplier = int(math.ceil(10/n_exemplars))  # math.ceil() rounds up. 10 is the derived from way block lengths are calculated

        # Trial generation function
        def generate_trials(trial_type_column, multiplier):
            """Generate a shuffled list of stimuli exemplars from a column in an excel stimuli file"""
            a = dict()  # declare a dict to be populated
            for i in range(len(exemplars)):
                a[i] = [exemplars[i][trial_type_column]] * multiplier  # populate the dict from vertical reads of the conditions
            a = a.values()  # extract only values (and not keys) from the list of dicts
            a = list(itertools.chain(*a))  # flatten the list of dicts into a list
            random.shuffle(a)  # shuffle this list, so that it can be drawn from by the trials
            return a
      Begin Routine:
        # Determine block repeats and which trial rows are used in each block
        if blocks.thisN == 0:
            trial_rows = "0:2"
            n_block_repeats = 10   #2*10 = 20 trials
        elif blocks.thisN == 1:
            trial_rows = "2:6"
            n_block_repeats = 5   #4*5 = 20 trials
        elif blocks.thisN == 2:
            trial_rows = "0:6"
            n_block_repeats = 10   #6*10 = 60 trials
        elif blocks.thisN == 3:
            trial_rows = "2:6"
            n_block_repeats = 5   #4*5 = 20 trials
        elif blocks.thisN == 4:
            trial_rows = "0:6"
            n_block_repeats = 10   #6*10 = 60 trials

        # Generate list of stimuli for the block
        trial_type_1_trials = generate_trials('trial_type_1_exemplars', list_multiplier)  # function and variable determined at begin exp.
        trial_type_2_trials = generate_trials('trial_type_2_exemplars', list_multiplier)
        trial_type_3_trials = generate_trials('trial_type_3_exemplars', list_multiplier)
        trial_type_4_trials = generate_trials('trial_type_4_exemplars', list_multiplier)
        trial_type_5_trials = generate_trials('trial_type_5_exemplars', list_multiplier)
        trial_type_6_trials = generate_trials('trial_type_6_exemplars', list_multiplier)
    TextComponent instructions_box
      wrapWidth = 1.6
      text [set every repeat] = $instructions
      startVal [time (s)] = 1
      letterHeight = 0.08
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    KeyboardComponent instructions_key
      forceEndRoutine = True
      allowedKeys = 'e', 'i'
      startVal [time (s)] = 2
      store = nothing
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  Routine end
    TextComponent end_box
      text = End of the task
      stopVal [duration (s)] = 3
      startVal [time (s)] = 0.75
      letterHeight = 0.1
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Flow
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = instructions.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{u'block': 1, u'instructions': u'In this response task will you have to react to words and propositions that are presented on the screen. In the next phase words will be presented in ORANGE.\n\nIt is your job to decide as soon as possible whether the word refers to TRUE or FALSE.\n\nPress the I key if the word is synonymous with TRUE.\nPress the E key if the word is a synonym for FALSE.\n\nIf you make a mistake, hit the correct key as soon as possible.\n\nPut your two index fingers on the E and I keys. Press either one to start.'},
      {u'block': 2, u'instructions': u"The next phase some propositions will be presented in BLUE.\nThese propositons are always statements about SELF ESTEEM.\n\nYou must respond AS IF 'I am good and not bad'.\n\nPress the I key when the statement is TRUE according to the above rule.\nPress the E key when the statement is FALSE according to the above rule.\n\nFor example:\nWhen the proposition 'I am valuable' appears, respond with the right response (TRUE).\nWhen the proposition 'I am worthless' appears, respond with the left response (FALSE).\n\nIf you make a mistake hit the correct key as soon as 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,
      {u'block': 3, u'instructions': u"Very good!\n\nThe next phase some words will be presented in ORANGE and some propositions in BLUE. These propositons are always statements about SELF ESTEEM.\n\nAgain, you must respond AS IF 'I am good and not bad'.\n\nPress the I key when the statement is TRUE according to the above rule.\nPress the E key when the statement is FALSE according to the above rule.\n\nThe rule that you must respond to the orange words does not change:\n\nPress the I key if the word is synonymous with TRUE.\nPress the E key if the word is a synonym for FALSE.\n\nIf you make a mista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,
      {u'block': 4, u'instructions': u"IMPORANT: THE RULE FOR THE BLUE STATEMENTS HAS NOW CHANGED.\n\nYou must respond AS IF 'I am bad and not good'.\n\nPress the I key when the statement is TRUE according to the above rule.\nPress the E key when the statement is FALSE according to the above rule.\n\nFor example:\nWhen the proposition 'I am valuable' appears, respond with the left response (FALSE).\nWhen the proposition 'I am worthless' appears, respond with the right response (TRUE).\n\nIf you make a mistake, hit the correct key as soon as possible.\n\nPut your two index fingers on the E and I keys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
    Routine instruction
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = block_layout.xlsx
      loopType = fullRandom
      nReps = n_block_repeats
      Selected rows = $trial_rows
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      conditions:
        [{u'trial_type': 1, u'true_label': u'TRUE', u'false_label': u'FALSE'},
        {u'trial_type': 2, u'true_label': u'TRUE', u'false_label': u'FALSE'},
        {u'trial_type': 3, u'true_label': u'TRUE', u'false_label': u'FALSE'},
        {u'trial_type': 4, u'true_label': u'TRUE', u'false_label': u'FALSE'},
        {u'trial_type': 5, u'true_label': u'TRUE', u'false_label': u'FALSE'},
        {u'trial_type': 6, u'true_label': u'TRUE', u'false_label': u'FALSE'}]
      Routine trial
    LoopTerminator trials
  LoopTerminator blocks
  Routine end
